OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Acquisition Client
  Dohvaća podatke sa Emotiv EPOCa.
  Uređaj mora biti upaljen, priključen.
  Acquisition Server mora biti pokrenut i uključen.
Comment
  Ovaj interface dohvaća podatke sa Emotiv EPOC uređaja,
  Detektira signale između dvaju frekvencija i aktivira zvučni
  signal ukoliko je intenzitet velik.

  Frekvencije za detekciju i threshold za detekciju valova
  je moguće podesiti u Python skripti.

  Po defaultu su podešeni za detekciju delta valova.
Comment
  Dependancies

  Emotiv EPOC Neuroheadset

  Emotiv Research Edition SDK v2.0.0.20
  Python 2.7.3 - 32 BIT
  SciPy - 0.9.0- 32 BIT
  NumPy - 1.8.1- 32 BIT
  OpenVIbe-1.2.2

  Ne koristiti novije softvere od navedenog
  zbog internih dependancia.
Comment
  Detect and Activate Sound

  Detektira velike intenzitete signala između dvaju
  frekvencija korištenjem band-pass filtra i aktivira
  zvučni podražaj ako je intenzitet iznat definiranog
  thresholda.

Acquisition client - Emotiv EPOC => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Detect And Activate Sound
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
